PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Dual_para
  keyboardBackend = ioHub
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Routines
  Routine Welcome_screen_
    TextComponent Welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Bienvenido 
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  Routine Instruccions
    TextComponent Instrucccions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        A continuación presione la barra espaciadora o haga clic en el botón "Iniciar" para comenzar el experimento.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Circle
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # Function to calculate distance between two points
        def distance(point1, point2):
            return ((point1[0] - point2[0])**2 + (point1[1] - point2[1])**2)**0.5
      Each Frame:
        # Crear un círculo
        # my_circle = visual.Circle(win, radius=0.2, fillColor='red')
        mouse_pos = mouse.getPos()
        dist = distance(mouse_pos, circle.pos)
        print(dist)
    PolygonComponent circle
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Blank
    TextComponent Blank_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Instruction_2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Sigue el circulo con el mouse 
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent Terminado
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = End
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Flow
  Routine Welcome_screen_
  Routine Instruccions
  Routine Blank
  Routine Instruction_2
  Routine Circle
  Routine End
